PsychoPy2experiment version="3.1.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = timings
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Routines
  Routine trial
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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    ImageComponent cue
      image [set every repeat] = $cue_file
      size = (0.3, 0.3)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = .2
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    ImageComponent target
      image = images/target.png
      pos [set every repeat] = $(target_x,0)
      size = (0.3, 0.3)
      startVal [time (s)] = 1.7
      stopVal [duration (s)] = .5
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    KeyboardComponent correct_key_resp
      allowedKeys = 'left','right'
      correctAns = $correct_answer
      forceEndRoutine = True
      startVal [time (s)] = 1.7
      stopVal [duration (s)] = 1
      store = first key
      storeCorrect = True
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    KeyboardComponent early_resp
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 1.7
      store = first key
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  Routine instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = TEXT TEXT TEXT
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  Routine end_instr
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = BYE
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('cue_file', 'images/arrow_left.png'), ('target_x', -0.5), ('valid', 1)]),
      OrderedDict([('cue_file', 'images/arrow_left.png'), ('target_x', -0.5), ('valid', 1)]),
      OrderedDict([('cue_file', 'images/arrow_left.png'), ('target_x', -0.5), ('valid', 1)]),
      OrderedDict([('cue_file', 'images/arrow_left.png'), ('target_x', -0.5), ('valid', 1)]),
      OrderedDict([('cue_file', 'images/arrow_right.png'), ('target_x', 0.5), ('valid', 1)]),
      OrderedDict([('cue_file', 'images/arrow_right.png'), ('target_x', 0.5), ('valid', 1)]),
      OrderedDict([('cue_file', 'images/arrow_right.png'), ('target_x', 0.5), ('valid', 1)]),
      OrderedDict([('cue_file', 'images/arrow_right.png'), ('target_x', 0.5), ('valid', 1)]),
      OrderedDict([('cue_file', 'images/arrow_left.png'), ('target_x', 0.5), ('valid', 0)]),
      OrderedDict([('cue_file', 'images/arrow_right.png'), ('target_x', -0.5), ('valid', 0)])]
    Routine trial
  LoopTerminator trials
  Routine end_instr
