PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = sounds
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Routines
  Routine trial
    SoundComponent sound_1
      sound = $sound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = sound.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('sound', 'lofi/happy.wav')]),
      OrderedDict([('sound', 'lofi/buddy.wav')])]
    Routine trial
  LoopTerminator trials
